PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'one_match': 'True', 'use_eeg': 'False'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = experiment
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.960
      stopVal [duration (s)] = 8.5
      text = +
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    ImageComponent image
      image [set every repeat] = $image_a
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.560
      text = +
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    ImageComponent image_2
      image [set every repeat] = $image_b
      size = (0.5, 0.5)
      startVal [time (s)] = 1.760
      stopVal [duration (s)] = 0.2
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 3
      stopVal [time (s)] = 9.5
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      text:
        X        X          X


        X        X          X


        X        X          X
    KeyboardComponent key_resp
      allowedKeys = '1','0'
      forceEndRoutine = False
      startVal [time (s)] = 1.760
      stopVal [duration (s)] = 8
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        ### BEGIN EXPERIMENT

        #Import Netstation library
        from egi_pynetstation.NetStation import NetStation

        categories = {'musical_instrument':'0', 'vehicle':'1', 'four_footed_animal':'2', 'fruit':'3',
               'human_body':'4', 'furniture':'5', 'tool':'6', 'clothing':'7', 'kitchen_utensil':'8',
               'bird':'9'}

        if expInfo['use_eeg']:
            #IP address of NetStation - CHANGE THIS TO MATCH THE IP ADDRESS OF YOUR NETSTATION
            IP_ns = '10.10.10.42'

            #IP address of amplifier (if using 300
            #series, this is the same as the IP address of
            #NetStation. If using newer series, the amplifier
            #has its own IP address)
            IP_amp = '10.10.10.51'

            #Port configured for ECI in NetStation - CHANGE THIS IF NEEDED
            port_ns = 55513

            #Start recording and send trigger to show this
            eci_client = NetStation(IP_ns, port_ns)
            eci_client.connect(ntp_ip = IP_amp)
            eci_client.begin_rec()
            eci_client.send_event(event_type = 'STRT', start = 0.0)
      Begin Routine:
        ### BEGIN ROUTINE
        imageATriggerSent = False
        imageBTriggerSent = False

        if matching:
            imageATrigger = 'IAM'+categories[category_a]
            imageBTrigger = 'IBM'+categories[category_b]
        else:
            imageATrigger = 'IAD'+categories[category_a]
            imageBTrigger = 'IBD'+categories[category_b]
      Each Frame:
        ### EACH FRAME
        #Send trigger to NetStation - Change 'stim' to
        #a meaningful trigger for your experiment OF NO MORE THAN FOUR CHARACTERS. You can
        #also set the trigger in a conditions file.

        if image.status == STARTED and not imageATriggerSent: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            if expInfo['use_eeg']:
                win.callOnFlip(eci_client.send_event, event_type = imageATrigger, label=imageATrigger)
            else:
                print("trigger: ", imageATrigger)
            imageATriggerSent = True #The trigger has now been sent, so we set this to true to avoid a trigger being sent on each frame

        if image_2.status == STARTED and not imageBTriggerSent: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            if expInfo['use_eeg']:
                win.callOnFlip(eci_client.send_event, event_type = imageBTrigger, label=imageBTrigger)
            else:
                print("trigger: ", imageBTrigger)
            imageBTriggerSent = True #The trigger has now been sent, so we set this to true to avoid a trigger being sent on each frame
      End Experiment:
        ### END EXPERIMENT
        if expInfo['use_eeg']:
            #Stop recording and disconnect
            eci_client.end_rec()
            eci_client.disconnect()
      End Routine:
        ### END ROUTINE

        if key_resp.keys and  '0' in key_resp.keys:
            if expInfo['one_match']:
                respTrigStr = 'rsnm'
            else:
                respTrigStr = 'rsmt'
            if expInfo["use_eeg"]:
                win.callOnFlip(eci_client.send_event, event_type = respTrigStr, label=respTrigStr)
            else:
                print("trigger: ", respTrigStr)

        elif key_resp.keys and '1' in key_resp.keys:
            if expInfo['one_match']:
                respTrigStr = 'rsmt'
            else:
                respTrigStr = 'rsnm'

            if expInfo["use_eeg"]:
                win.callOnFlip(eci_client.send_event, event_type = respTrigStr, label=respTrigStr)
            else:
                print("trigger: ", respTrigStr)

        if expInfo["use_eeg"]:
            eci_client.resync();
  Routine fixation
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.5
      text = +
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [time (s)] = 7.5
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      text:
        X        X          X


        X        X          X


        X        X          X
  Routine practice_trial_2
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 1.960
      stopVal [duration (s)] = 8.5
      text = +
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    ImageComponent image_3
      image [set every repeat] = $image_a
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.560
      text = +
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    ImageComponent image_4
      image [set every repeat] = $image_b
      size = (0.5, 0.5)
      startVal [time (s)] = 1.760
      stopVal [duration (s)] = 0.2
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 3
      stopVal [time (s)] = 9.5
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      text:
        X        X          X


        X        X          X


        X        X          X
    KeyboardComponent key_resp_2
      allowedKeys = '1','0'
      forceEndRoutine = False
      startVal [time (s)] = 1.760
      stopVal [duration (s)] = 8
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  Routine experiment_start
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    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The experiment will now start.

        Press any key when you are ready to begin.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
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    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $"In this experiment you will respond after viewing a pair of images. Once you see the second image, press " + ('0' if expInfo['one_match'] else "1") +" if the images did not match and "+('1' if expInfo['one_match'] else '0') +" if the images matched. Respond as quickly as possible."+"\n\nWhen you see a grid of x's you can blink/move your eyes, but remain as still as possible and do not blink otherwise."+"\n\nPress any key to start some practice trials."
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine break_2
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    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You are now in a break!

        Press any key when you are ready to continue.
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if not ((trialsLoop.thisN%20)==0) or trialsLoop.thisN == 0:
            continueRoutine = False #end the routine
Flow
  Routine instructions
  Routine fixation
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = stimuli/practice_pairs.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('image_a', 'stimuli/images/060 .bmp'), ('image_b', 'stimuli/images/079 .bmp'), ('name_a', 'Clock'), ('name_b', 'Dresser'), ('category_a', 'furniture'), ('category_b', 'furniture'), ('matching', True)]),
      OrderedDict([('image_a', 'stimuli/images/242 .bmp'), ('image_b', 'stimuli/images/207 .bmp'), ('name_a', 'Truck'), ('name_b', 'Sled'), ('category_a', 'vehicle'), ('category_b', 'vehicle'), ('matching', True)]),
      OrderedDict([('image_a', 'stimuli/images/022 .bmp'), ('image_b', 'stimuli/images/228 .bmp'), ('name_a', 'Bed'), ('name_b', 'Television'), ('category_a', 'furniture'), ('category_b', 'furniture'), ('matching', True)]),
      OrderedDict([('image_a', 'stimuli/images/025 .bmp'), ('image_b', 'stimuli/images/099 .bmp'), ('name_a', 'Bell'), ('name_b', 'French horn'), ('category_a', 'musical_instrument'), ('category_b', 'musical_instrument'), ('matching', True)]),
      OrderedDict([('image_a', 'stimuli/images/115 .bmp'), ('image_b', 'stimuli/images/088 .bmp'), ('name_a', 'Hand'), ('name_b', 'Finger'), ('category_a', 'human_body'), ('category_b', 'human_body'), ('matching', True)]),
      OrderedDict([('image_a', 'stimuli/images/083 .bmp'), ('image_b', 'stimuli/images/207 .bmp'), ('name_a', 'Ear'), ('name_b', 'Sled'), ('category_a', 'human_body'), ('category_b', 'vehicle'), ('matching', False)])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
    Routine practice_trial_2
  LoopTerminator practice_trials
  Routine experiment_start
  Routine fixation
  LoopInitiator trialsLoop loopType="TrialHandler"
    conditionsFile = stimuli/pairs.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('image_a', 'stimuli/images/190 .bmp'), ('image_b', 'stimuli/images/219 .bmp'), ('name_a', 'Rolling pin'), ('name_b', 'Stove'), ('category_a', 'kitchen_utensil'), ('category_b', 'kitchen_utensil'), ('matching', True)]),
      OrderedDict([('image_a', 'stimuli/images/106 .bmp'), ('image_b', 'stimuli/images/250 .bmp'), ('name_a', 'Glove'), ('name_b', 'Watch'), ('category_a', 'clothing'), ('category_b', 'clothing'), ('matching', True)]),
      OrderedDict([('image_a', 'stimuli/images/169 .bmp'), ('image_b', 'stimuli/images/191 .bmp'), ('name_a', 'Penguin'), ('name_b', 'Rooster'), ('category_a', 'bird'), ('category_b', 'bird'), ('matching', True)]),
      OrderedDict([('image_a', 'stimuli/images/047 .bmp'), ('image_b', 'stimuli/images/147 .bmp'), ('name_a', 'Car'), ('name_b', 'Motorcycle'), ('category_a', 'vehicle'), ('category_b', 'vehicle'), ('matching', True)]),
      OrderedDict([('image_a', 'stimuli/images/039 .bmp'), ('image_b', 'stimuli/images/240 .bmp'), ('name_a', 'Bus'), ('name_b', 'Train'), ('category_a', 'vehicle'), ('category_b', 'vehicle'), ('matching', True)]),
      OrderedDict([('image_a', 'stimuli/images/046 .bmp'), ('image_b', 'stimuli/images/031 .bmp'), ('name_a', 'Cap'), ('name_b', 'Boot'), ('category_a', 'clothing'), ('category_b', 'clothing'), ('matching', True)]),
      OrderedDict([('image_a', 'stimuli/images/196 .bmp'), ('image_b', 'stimuli/images/114 .bmp'), ('name_a', 'Saw'), ('name_b', 'Hammer'), ('category_a', 'tool'), ('category_b', 'tool'), ('matching', True)])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
    Routine trial
    Routine break_2
  LoopTerminator trialsLoop
